PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = mock_study
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine trial
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    MouseComponent mouse
      clickable = image1, image2, image3, image4, image5
      correctAns = correct_answer
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent imageQuery
      image [set every repeat] = $query_image
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image1
      image [set every repeat] = $choice1
      pos = (0, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = $choice2
      pos = (0.3, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image [set every repeat] = $choice3
      pos = (0.6, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image [set every repeat] = $choice4
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image5
      image [set every repeat] = $choice5
      pos = (0.3, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine WelcomeScreen
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    TextComponent textWelcomeMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the user study

        On the following screen, you will see a query image on the left, and will choose from the images on the right which is the same.

        Press 'SPACE' to start
    KeyboardComponent key_Continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndScreen
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    TextComponent textEndMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for completing!
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  Routine blank500
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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Flow
  Routine WelcomeScreen
  LoopInitiator trialsColor loopType="TrialHandler"
    conditionsFile = queryImages.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'query_image': 'images/grape.png', 'choice1': 'images/kiwi.png', 'choice2': 'images/orange.png', 'choice3': 'images/grape.png', 'choice4': 'images/banana.png', 'choice5': 'images/apple.png', 'correct_answer': 'image3'},
      {'query_image': 'images/kiwi.png', 'choice1': 'images/kiwi.png', 'choice2': 'images/apple.png', 'choice3': 'images/grape.png', 'choice4': 'images/banana.png', 'choice5': 'images/orange.png', 'correct_answer': 'image1'},
      {'query_image': 'images/banana.png', 'choice1': 'images/apple.png', 'choice2': 'images/banana.png', 'choice3': 'images/orange.png', 'choice4': 'images/kiwi.png', 'choice5': 'images/grape.png', 'correct_answer': 'image2'},
      {'query_image': 'images/apple.png', 'choice1': 'images/orange.png', 'choice2': 'images/apple.png', 'choice3': 'images/grape.png', 'choice4': 'images/banana.png', 'choice5': 'images/kiwi.png', 'correct_answer': 'image2'},
      {'query_image': 'images/orange.png', 'choice1': 'images/banana.png', 'choice2': 'images/apple.png', 'choice3': 'images/kiwi.png', 'choice4': 'images/grape.png', 'choice5': 'images/orange.png', 'correct_answer': 'image5'}]
    Routine trial
    Routine blank500
  LoopTerminator trialsColor
  Routine EndScreen
